CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|pyroptosis_signature/Plate_2_data/3.cellprofiler_analysis/loaddata_by_celltype
    Name of the file:loaddata_PBMC_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|pyroptosis_signature/Plate_2_data/0.download_data/70117_20230210MM1_Gasdermin514_CP_BC430856__2023-03-22T15_42_38-Measurement1/Maximum_Images
    Process just a range of rows?:Yes
    Rows to process:1,100000
    Group images by metadata?:No
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    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigGasdermin
    Name the output image:CorrGasdermin
    Select the illumination function:IllumGasdermin
    Select how the illumination function is applied:Divide
    Select the input image:OrigPM
    Name the output image:CorrPM
    Select the illumination function:IllumPM
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:3|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notes:['Since there are many nuclei that are overlapping and the density is very high per FOV, these parameters are the best that can be made at this moment!']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:4|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notes:['Cells are very small and there are so many of them that is hard to tell (even with the contrast/brightness) turned up if the segmentation is doing well or not. Since we do not have an RNA, we use PM/Golgi/Actin channel (like in our other projects) as the whole cell segmentation, and these parameters are the best I can get at this moment with this cell density.', '']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrPM
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:6|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:7|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureGranularity:[module_num:8|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Measure within objects?:No
    Select objects to measure:Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageIntensity:[module_num:9|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:10|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:11|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:12|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enabled:False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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:14|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enabled:False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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:15|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enabled:False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
    Select images to measure:CorrDNA, CorrER, CorrGasdermin, CorrMito, CorrPM, CorrRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:16|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|Interstellar_Project/2.wave3_data/3.cellprofiler_analysis/analysis_output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:interstellar_wave3.sqlite
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells,Cytoplasm,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Interstellar_Wave3
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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